PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
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Routines
  Routine Instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcom
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine item
    ImageComponent image
      image = C:\Users\TAL brainlab\Pictures\EpicFun\screen_2020-07-10_16-53-02.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Paint!
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    BrushComponent brush
      buttonRequired = True
      lineColor = $(-0.2157, 0.1686, 0.8588)
      lineWidth = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Finish here.
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Flow
  Routine Instruction
  LoopInitiator item_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine item
  LoopTerminator item_loop
  Routine finish
